PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  End Message = Thank you for your participation.
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = deeppsych_exp
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Intro_Instructions
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    TextComponent intro_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Welcome. You will see color words on the screen.

        Your goal is to identify the INK COLOR, NOT the word meaning.

        Press 'F' for Red and 'J' for Blue.
    KeyboardComponent start_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fixation_Practice
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    TextComponent fixation_cross
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      units = norm
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  Routine Stimulus_Practice
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    TextComponent stimulus_word
      color = $inkColor
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = $word
      units = norm
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    KeyboardComponent response_key
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine Feedback_Practice
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    TextComponent feedback_text
      color = green
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Correct!
      units = norm
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  Routine ITI_Practice
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    TextComponent blank_screen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = norm
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  Routine Main_Instructions
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    TextComponent main_instr_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Practice Complete.

        Now you will perform the actual test.

        Try to be as fast and accurate as possible.
        Do not read the word; name the color.

        Press Space to begin.
    KeyboardComponent start_main
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fixation_Main
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    TextComponent fixation_cross
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      units = norm
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  Routine Stimulus_Main
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    TextComponent stimulus_word
      color = $inkColor
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = $word
      units = norm
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    KeyboardComponent response_key
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine ITI_Main
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    TextComponent blank_screen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = norm
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  Routine Ending_Screen
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    TextComponent end_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Experiment Complete.

        Thank you for your participation.
Flow
  Routine Intro_Instructions
  LoopInitiator Practice_Loop loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Fixation_Practice
    Routine Stimulus_Practice
    Routine Feedback_Practice
    Routine ITI_Practice
  LoopTerminator Practice_Loop
  Routine Main_Instructions
  LoopInitiator Main_Experiment_Loop loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Fixation_Main
    Routine Stimulus_Main
    Routine ITI_Main
  LoopTerminator Main_Experiment_Loop
  Routine Ending_Screen
